<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>HarpBehaviorCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>todo</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>BehaviorBoard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>internalPub</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpBehavior.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>false</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM5</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>internalPub</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Publisher">
                <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>todo</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>ZeroMQBehaviorBoard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Subscriber">
                <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Last.Buffer</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:ConvertFromMessageBytes" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>todo</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BehaviorBoardInitialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:MuteReplies>false</harp:MuteReplies>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateEventEnablePayload">
                <beh:EventEnable>PortDI PortDIO AnalogData Camera0 Camera1</beh:EventEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>TriggerHarpReadDump</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>