<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Visualizer">
              <Name>ExperimentControlUI</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsExperimentRunning</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>StartButton</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Start!</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>StartLogging</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>IsExperimentRunning</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsExperimentRunning</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>EndButton</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>End Session</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>EndExperiment</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>IsExperimentRunning</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="11" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasStreams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\SpinnakerCameraControllerSaturationVisualizer.bonsai" />
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
            </Expression>
            <Expression xsi:type="gui:TabControlBuilder">
              <gui:Name>UserInterface</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 16pt</gui:Font>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>