<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindJustFramesSchemas;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:p4="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.HarpUtils;assembly=AllenNeuralDynamics.HarpUtils"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath />
        <RigPath />
        <SessionPath />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindJustFramesRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateRepository">
                <p2:Path>../.</p2:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" Selector="RootPath" />
                <Property Name="SessionName" Selector="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder />
              <SessionName xsi:nil="true" />
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CompoundRootPath</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsExperimentRunning</Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>IsRepoClean</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repository</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:IsRepositoryClean">
                      <p2:IgnoreUntracked>false</p2:IgnoreUntracked>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubjectSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AllowDirtyRepo</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>AllowDirty?</scr:Name>
                    <scr:Expression>Item2 ? False : Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:ThrowException">
                      <p5:Message>Repository is not clean! Please discard all local changes.</p5:Message>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>HarpBehaviorCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>todo</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>BehaviorBoard</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorCommands</Name>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>internalPub</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpBehavior.PortName</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="PortName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="beh:Device">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:DumpRegisters>false</harp:DumpRegisters>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:Heartbeat>Enabled</harp:Heartbeat>
                            <harp:IgnoreErrors>false</harp:IgnoreErrors>
                            <harp:PortName>COM5</harp:PortName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>internalPub</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageBytes</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="zmq:Publisher">
                            <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                          </Combinator>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>todo</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>ZeroMQBehaviorBoard</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="zmq:Subscriber">
                            <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Last.Buffer</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:ConvertFromMessageBytes" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>HarpBehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>todo</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>BehaviorBoardInitialization</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerHarpReadDump</Name>
                        </Expression>
                        <Expression xsi:type="harp:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:MuteReplies>false</harp:MuteReplies>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:Heartbeat>Enabled</harp:Heartbeat>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpBehaviorCommands</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="beh:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="beh:CreateEventEnablePayload">
                            <beh:EventEnable>PortDI PortDIO AnalogData Camera0 Camera1</beh:EventEnable>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpBehaviorCommands</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartExperiment</Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>TriggerHarpReadDump</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:ReplaySubject" TypeArguments="beh:CameraOutputs">
                    <rx:Name>ControllersInitialized</rx:Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TriggeredCameraController0</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>CameraOutput0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput" TypeArguments="p1:CameraControllerSpinnakerCamera">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>thisCameraController</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisCameraController</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Camera" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\InstantitateTriggeredCameras.bonsai">
                          <Camera>CameraOutput0</Camera>
                        </Expression>
                        <Expression xsi:type="rx:GroupBy">
                          <rx:KeySelector>Item2</rx:KeySelector>
                          <rx:ElementSelector>Item1</rx:ElementSelector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisCameraController</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="4" Label="Source2" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TriggeredCameraController1</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>CameraOutput1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput" TypeArguments="p1:CameraControllerSpinnakerCamera">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>thisCameraController</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisCameraController</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Camera" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\InstantitateTriggeredCameras.bonsai">
                          <Camera>CameraOutput1</Camera>
                        </Expression>
                        <Expression xsi:type="rx:GroupBy">
                          <rx:KeySelector>Item2</rx:KeySelector>
                          <rx:ElementSelector>Item1</rx:ElementSelector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisCameraController</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="4" Label="Source2" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>TriggeredCamerasStreams</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllersInitialized</Name>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="beh:CreateStartCamerasPayload,beh:CameraOutputs">
                    <MemberName>StartCameras</MemberName>
                    <Value>None</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Scan">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Accumulation,Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseOr" />
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Value" Selector="it" />
                          </PropertyMappings>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="beh:CreateStartCamerasPayload,beh:CameraOutputs">
                          <MemberName>StartCameras</MemberName>
                          <Value>CameraOutput0 CameraOutput1</Value>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CameraControllersActive</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraControllersActive</Name>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:StartCameras" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartExperiment</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraControllersActive</Name>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:StopCameras" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EndExperiment</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="23" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="29" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedAnalogData" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HarpTimestampSource</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>SaveRawVideo</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraQc.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>ControllersInitialized</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Count" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>ExpectedControllers</scr:Name>
        <scr:Expression>(it.TriggeredCameraController0==null ? 0 : 1)+(it.TriggeredCameraController1==null ? 0 : 1)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="NotEqual" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p5:ThrowException" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SubjectSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SkipHardwareValidation</Selector>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:Defer">
              <Name>Behavior</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Modality" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p5:AppendModalitySuffix,sys:Nullable(p5:Modality)">
                    <MemberName>Modality</MemberName>
                    <Value>Behavior</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpLogging</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehaviorGetMetadata.bonsai" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>Behavior</DeviceName>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="5" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source3" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpCommandsLogging</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="harp:Parse">
                          <harp:Register xsi:type="harp:ParseMessagePayload">
                            <harp:PayloadType>Timestamp</harp:PayloadType>
                            <harp:IsArray>false</harp:IsArray>
                          </harp:Register>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>HarpSeconds</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorCommands</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpSeconds</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehaviorGetMetadata.bonsai" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/Behavior</DeviceName>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="11" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="11" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source3" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SoftwareEvents</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SoftwareEvent</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ObserveOn">
                            <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ObserveOn">
                            <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:TimestampSoftwareEvent" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai">
                          <LoggerName>SoftwareEvents</LoggerName>
                          <SubjectName>LoggingRootPath</SubjectName>
                          <Modality xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Metadata</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Repository</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Head</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p5:CreateSoftwareEvent">
                                  <p5:EventName>RepositoryStatus</p5:EventName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>SoftwareEvent</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="9" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>Other</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Logs</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DeviceName</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>ConfigSchemaLogging</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>SubjectSchema</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:SerializeToJson">
                                  <p1:Formatting>None</p1:Formatting>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>session_output</LogName>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RigSchema</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:SerializeToJson">
                                  <p1:Formatting>None</p1:Formatting>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>rig_output</LogName>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RawRigSchema</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>rig_input</LogName>
                                <Extension>json</Extension>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RawSessionSchema</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>session_input</LogName>
                                <Extension>json</Extension>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RawTaskLogicSchema</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>tasklogic_input</LogName>
                                <Extension>json</Extension>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="6" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="6" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source3" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="11" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source2" />
                              <Edge From="12" To="17" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="17" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source3" />
                              <Edge From="18" To="23" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                              <Edge From="20" To="23" Label="Source2" />
                              <Edge From="21" To="22" Label="Source1" />
                              <Edge From="22" To="23" Label="Source3" />
                              <Edge From="24" To="29" Label="Source1" />
                              <Edge From="25" To="26" Label="Source1" />
                              <Edge From="26" To="29" Label="Source2" />
                              <Edge From="27" To="28" Label="Source1" />
                              <Edge From="28" To="29" Label="Source3" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Logs</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>EndExperiment</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>ExperimentCompleted</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p5:CreateSoftwareEvent">
                                  <p5:EventName>SoftwareEvent</p5:EventName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpTimestampSource</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:CreateTimestamped" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p5:TimestampSoftwareEvent" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p3:SerializeToJson">
                                  <p3:Formatting>None</p3:Formatting>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName />
                                <LogName>EndSession</LogName>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="4" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="12" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="12" Label="Source2" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source3" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>BehaviorVideos</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Modality" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p5:AppendModalitySuffix,sys:Nullable(p5:Modality)">
                    <MemberName>Modality</MemberName>
                    <Value>BehaviorVideos</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TriggeredCameraController0</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TriggeredCamerasLogger.bonsai">
                    <CameraStream>TriggeredCamerasStream0</CameraStream>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TriggeredCameraController0</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TriggeredCameraController1</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TriggeredCamerasLogger.bonsai">
                    <CameraStream>TriggeredCamerasStream1</CameraStream>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TriggeredCameraController1</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="11" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="18" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizers.bonsai" />
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Text>JustFrames</ui:Text>
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size xsi:nil="true" />
        <ui:WindowState xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndRoutine</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="27" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="29" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>